CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*\\\\\\\\(?P<Color>[BlueRdCKGrn]+)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*\\\\{(?P<ImageN>[0-9]+)\\\\}
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata file location:E:\\\\Cell Profiler\\\\20150825 Images for Full Spot Analysis\\\\FullCores.csv
    Match file and image metadata:[{'Image Metadata': u'ImageN', 'CSV Metadata': u'PARENT_REGION_ID'}]
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'CK': u'ImageN', u'DAPI': u'ImageN', u'CD98': u'ImageN', u'CD166': u'ImageN'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (metadata does Color "Blue")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Color "CK")
    Name to assign these images:CK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Color "Green")
    Name to assign these images:CD98
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Color "Red")
    Name to assign these images:CD166
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:X_INDEX
    Metadata category:Y_INDEX

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,110
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.60
    Lower and upper bounds on threshold:0.01,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:CD166
    Name the primary objects to be identified:CD166Pos
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CK
    Name the primary objects to be identified:CKPos
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CD98
    Name the primary objects to be identified:CD98Pos
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:.875
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskObjects:[module_num:9|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
    Select objects to be masked:Nuclei
    Name the masked objects:CKWithNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CKPos
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:10|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
    Select objects to be masked:Nuclei
    Name the masked objects:CD166WithNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD166Pos
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:Nuclei
    Name the masked objects:CD98WithNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD98Pos
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:CD166WithNuclei
    Name the objects to be identified:CD166PosCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CD166
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    Regularization factor:.01
    Name the outline image:CD166Outlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:CKWithNuclei
    Name the objects to be identified:CKPosCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CK
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    Regularization factor:0.05
    Name the outline image:CKOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:CD98WithNuclei
    Name the objects to be identified:CD98PosCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CD98
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    Regularization factor:0.05
    Name the outline image:CD44Outlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.045,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RelateObjects:[module_num:15|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
    Select the input child objects:CD166PosCells
    Select the input parent objects:CKPosCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:16|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
    Select the input child objects:CD98PosCells
    Select the input parent objects:CKPosCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:17|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
    Select the input child objects:CD98PosCells
    Select the input parent objects:CD166PosCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ClassifyObjects:[module_num:18|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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:CKPosCells
    Select the measurement to classify by:Children_CKWithNuclei
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:CKPosCells
    Select the first measurement:Children_CD166PosCells_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:1
    Select the second measurement:Children_CD98PosCells_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:1
    Use custom names for the bins?:Yes
    Enter the low-low bin name:CKPos_CD166Neg_CD98Neg
    Enter the low-high bin name:CKPos_CD166Neg_CD98Pos
    Enter the high-low bin name:CKPos_CD166Pos_CD98Neg
    Enter the high-high bin name:CKPos_CD166Pos_CD98Pos
    Retain an image of the classified objects?:Yes
    Enter the image name:CKPosCells_categories

MeasureObjectNeighbors:[module_num:19|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enabled:False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
    Select objects to measure:CD166PosCells
    Select neighboring objects to measure:CD44PosCells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:CD166Pos_CD44Pos_Neighbors
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:20|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enabled:False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
    Select objects to measure:CD166PosCells
    Select objects to measure:CD98PosCells
    Select objects to measure:CKWithNuclei
    Select objects to measure:CKPosCells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:21|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enabled:False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
    Hidden:1
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
CalculateMath:[module_num:22|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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:CD166PosCells
    Select the first operand measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CKPosCells
    Select the second operand measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:Object_overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#FF2B2B
    Load outlines from an image or objects?:Objects
    Select objects to display:CD166PosCells
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    Select outline color:#FF00EC
    Load outlines from an image or objects?:Objects
    Select objects to display:CKPosCells
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    Select outline color:#26FF00
    Load outlines from an image or objects?:Objects
    Select objects to display:CD98PosCells
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    Select outline color:#88F9FF
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:CKPosCells_categories
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    Select method for constructing file names:From image filename
    Select image name for file prefix:CK
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|E:\\\\\\\\Cell Profiler\\\\\\\\20150825 Images for Full Spot Analysis\\\\\\\\Outputs from 20150825 Images\\\\\\\\Colocalization
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Object_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|E:\\\\\\\\Cell Profiler\\\\\\\\20150825 Images for Full Spot Analysis\\\\\\\\Outputs from 20150825 Images\\\\\\\\Overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\\\\\\\Cell Profiler\\\\\\\\20150825 Images for Full Spot Analysis\\\\\\\\Outputs from 20150825 Images
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:Metadata_Series
    Export all measurement types?:Yes
    Press button to select measurements to export:CD98WithNuclei|Location_Center_Y,CD98WithNuclei|Location_Center_X,CD98WithNuclei|Number_Object_Number,CD98WithNuclei|Parent_Nuclei,CD98WithNuclei|Children_CD98PosCells_Count,CD166PosCells|Children_CD98PosCells_Count,CD166PosCells|Location_Center_Y,CD166PosCells|Location_Center_X,CD166PosCells|Parent_CKPosCells,CD166PosCells|Parent_CD166WithNuclei,CD166PosCells|Number_Object_Number,CKWithNuclei|Location_Center_Y,CKWithNuclei|Location_Center_X,CKWithNuclei|Children_CKPosCells_Count,CKWithNuclei|Parent_Nuclei,CKWithNuclei|Number_Object_Number,Image|Count_CKWithNuclei,Image|Count_CD166PosCells,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
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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